PsychoPy2experiment version="2023.1.2"
#
#
#
#
#
#
#
#
#
#
#
#
#
#
#
#
#
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = run_1
  keyboardBackend = Pyglet
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Routines
  Routine consecutive_trials
    PolygonComponent canvas_2
      fillColor = white
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .3
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    PolygonComponent ball_2
      fillColor = black
      pos [set every repeat] = (ball.pos[0]+ball_path[path_index], ball_y)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    PolygonComponent paddle_2
      anchor = bottom-left
      fillColor = blue
      pos = (paddle_x2, -.5)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
      store = all keys
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    CodeComponent code_winLose_2
      Code Type = Auto->JS
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      End Routine:
        if ball.pos[0] in [paddle.pos[0], paddle.pos[0]-.1, paddle.pos[0]+.1]:
            winning=1
            losing=0
        else:
            winning=0
            losing=1
    CodeComponent code_paddleX_2
      Code Type = Auto->JS
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      End Routine:
        if type(key_resp.keys)=='list':

            if key_resp_2.keys[-1]=='right':
                paddle_x = paddle_2.pos[0]+.1

            elif key_resp_2.keys[-1]=='left':
                paddle_x = paddle_2.pos[0]-.1

        #else:
        #    paddle_x = paddle_2.pos[1]

        ball_y = ball_y-.1
        path_index += 1
  Routine first_trial
    PolygonComponent canvas
      fillColor = white
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $level
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    PolygonComponent ball
      anchor = top-center
      fillColor = black
      pos [set every repeat] = (ball_x_pos[gameloop][trial_loop], ball_y_pos[gameloop][trial_loop])
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $level
      units = height
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    PolygonComponent paddle
      anchor = bottom-left
      fillColor [set every frame] = blue
      pos [set every frame] = (paddle_x, paddle_y)
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $level
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = 'right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $level
      store = all keys
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    CodeComponent win_lose
      Code Type = Auto->JS
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      End Routine:
        ball_end = ball_x_pos[gameloop][-1]

        if trial_loop<9:
            if ball_end<paddle_x+.3 and ball_end>paddle_x:
                winning=1
                losing=0
            else:
                winning=0
                losing=1

        print(trial_loop)
    CodeComponent _1_paddlePos
      Code Type = Auto->JS
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      Begin Routine:
        move = 'None'
      End Routine:
        paddle_old = paddle_x

        if type(key_resp.keys) ==list:


            if key_resp.keys[-1]=='right':
            # if last keypress was "right"
                if paddle_x >= .15:
                    move = 'right press, but paddle in right corner already'
                elif paddle_x < .15:
                # and the paddle isn't in right corner
                    paddle_x = paddle_x+.1
                    move='right'
                else:
                    move='right confused'


        #            if trial_loop < 8:
        #            # if we're in the first 8 trials
        #                paddle_x = paddle_x+.1
        #                move = 'right'
        #                # move right
        #            elif ball_x_pos[gameloop][trial_loop] > paddle_x+.45:
        #            # else if the ball position is far enough right
        #            # that it won't collide with the paddle upon movement
        #                paddle_x = paddle_x+.1
        #                move = 'right_last'
        #                # move right
        #            else:
        #                move = 'Right press: last trial in loop, ball in the way, so no move'
        #
            elif key_resp.keys[-1]=='left':
                if paddle_x <= -.45:
                    move = 'left press but paddle in left corner already'
                elif paddle_x > -.45:
                    paddle_x = paddle_x-.1
                    move='left'
                else:
                    'left confused'

        #            if trial_loop< 8:
        #                paddle_x = paddle_x-.1
        #                move = 'left'
        #            elif ball_x_pos[gameloop][trial_loop] < paddle_x-.1:
        #                paddle_x = paddle_x-.1
        #                move = 'left_last'
        #            else:
        #                move = 'Left press: last trial loop, ball in the way, so no move'
        #

        paddle_new = paddle_x

        if type(key_resp.keys) ==list and paddle_old == paddle_new:
            # move = 'key detected, no move'
            print('key_resp.keys with no change in paddle:')
            print(key_resp.keys)
    CodeComponent trial_loop
      Code Type = Auto->JS
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      End Routine:
        trial_loop+=1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        print("level: "+str(level))

        #levels.append[level]

        print(paddle_x)
        print(paddle_y)
        print()


        ball_end = ball_x_pos[gameloop][-1]

        if trial_loop==9:
            if ball_end<paddle_x+.3 and ball_end>paddle_x:
                ball_y_pos[gameloop][9]= ball_y_pos[gameloop][8]
      End Routine:
        ball_end = ball_x_pos[gameloop][-1]

        if trial_loop==8:
            if ball_end<paddle_x+.3 and ball_end>paddle_x:
                if type(key_resp.keys) != list:
                    ball_y_pos[gameloop][9]= ball_y_pos[gameloop][8]


        #elif trial_loop==8:
        #    if ball_end<paddle_x+.4 and ball_end>paddle_x and key_resp.keys[-1]=='right':
        #        if type(key_resp.keys) != list:
        #            ball_y_pos[gameloop][9]= ball_y_pos[gameloop][8]
        #
        #
        #elif trial_loop==8:
        #    if ball_end<paddle_x+.3 and ball_end>paddle_x-.1 and key_resp.keys[-1]=='left':
        #        if type(key_resp.keys) != list:
        #            ball_y_pos[gameloop][9]= ball_y_pos[gameloop][8]
        #
    CodeComponent start_paddle_pos
      Code Type = Auto->JS
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      Before Experiment:
        if trial_loop==0:
            paddle_x = -.2
    CodeComponent _1_stair_level
      Code Type = Auto->JS
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      Begin Routine:
        if example == False:
            stair_level.append(level)
    CodeComponent save_positions
      Code Type = Auto->JS
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      Begin Routine:
        if example == False:
            thisExp.addData('ball_x',ball_x_pos[gameloop][trial_loop])
            thisExp.addData('ball_y',ball_y_pos[gameloop][trial_loop])
            thisExp.addData('paddle_x',paddle_x)
            thisExp.addData('paddle_y',paddle_y)
            thisExp.addData('level',level)
      End Routine:
        thisExp.addData('key_presses',key_resp.keys)
        thisExp.addData('move',move)
    CodeComponent print_stuff
      Code Type = Auto->JS
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      Begin Routine:
        print(paddle_x)
        print(paddle_y)
        print()
        print('example:')
        print(example)
      End Routine:
        print('key_resp.keys is: ')
        print(key_resp.keys)
        print('type(key_resp.keys is: ')
        print(type(key_resp.keys))
  Routine game_message_2
  Routine blank_500
    PolygonComponent polygon
      fillColor = grey
      lineColor = grey
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent trial_loop_zero
      Code Type = Auto->JS
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      Begin Routine:
        trial_loop=0
    CodeComponent paddle_reset
      Code Type = Auto->JS
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      Before Experiment:
        paddle_x = -.2
      Begin Routine:
        paddle_x = -.2
  Routine goodbye_screen
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        The experiment is complete!

        Thank you for participating.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent save_level_list
      Code Type = Auto->JS
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      Before Experiment:
        import pickle

        with open('level_list.pkl', 'wb') as f:
            pickle.dump(stair_level, f)
  Routine points_lose
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +0 points
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    CodeComponent _1_gamelooper
      Code Type = Auto->JS
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      End Routine:
        gameloop+=1
    CodeComponent key_resp_corr_lose
      Code Type = Auto->JS
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      End Routine:
        key_resp.corr=0
        if example==False:
            game_staircase.addData(key_resp.corr)
  Routine points_lose_2
  Routine points_win
    TextComponent points_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +2 points
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    CodeComponent _1_gameloop
      Code Type = Auto->JS
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      End Routine:
        gameloop +=1
    CodeComponent key_resp_corr_win
      Code Type = Auto->JS
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      Begin Routine:
        key_resp.corr=1
        if example==False:
            game_staircase.addData(key_resp.corr)
    CodeComponent total_points_update
      Code Type = Auto->JS
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      Before Experiment:
        total_points += 2
  Routine points_lose_3
  Routine game_win
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        +2 points. Game over!

        Out of 80 possible points, your total score is...
  Routine game_lose
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        +0 points. Game over!

        Out of 80 possible points, your total score is...
  Routine blank_500_pre
    PolygonComponent polygon_pre
      fillColor = grey
      lineColor = grey
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent init_paddleX
      Code Type = Auto->JS
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      Begin Routine:
        paddle_x = -.3
        print("paddle_x: "+str(paddle_x))
    CodeComponent init_ballParams
      Code Type = Auto->JS
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      Begin Routine:
        import random

        # make ball_path, a list of values to add to the x_coordinate of the ball at each step of the game (10 steps -> length 10)
        ball_start = random.randint(0,9)
        ball_end   = random.randint(0,9)

        ball_start = (ball_start - 4.5)/10
        ball_end   = (ball_end - 4.5)/10

        ball_y = .5


        print('ball start: '+str(ball_start))
        print('ball_end: '+str(ball_end))
        print('ball_y: '+str(ball_y))
    CodeComponent init_ballPath
      Code Type = Auto->JS
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      Begin Routine:
        ball_path = []
        ball_path.append(ball_start)

        print('ball_path: '+str(ball_path))
  Routine welcome_2
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nice work, you've completed the intro round!

        Now you'll play 4 blocks of games at the same speed.

        To start the first block of games, press SPACEBAR.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank_newball
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        ball_x_pos = make_x_path(100,stair=False)

        ball_y_pos     = [[.5, .4, .3, .2, .1, 0, -.1, -.2, -.3, -.4] for i in range(100)]

        gameloop=0

        print(ball_x_pos)
        print('ball_x_pos[0][0]: '+str(ball_x_pos[0][0]))
        print('game loop: '+str(gameloop))
        print('trial loop: '+str(trial_loop))


        with open('ball_x_full.pkl', 'wb') as f:
            pickle.dump(ball_x_pos, f)
    PolygonComponent poly2
      fillColor = grey
      lineColor = grey
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent trial_loop_zero_2
      Code Type = Auto->JS
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      Begin Routine:
        trial_loop=0
    CodeComponent paddle_reset_2
      Code Type = Auto->JS
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      Before Experiment:
        paddle_x = -.2
      Begin Routine:
        paddle_x = -.2
  Routine blankety
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nice work, you've completed the first set of games!

        Now you'll play 4 more sets of games. These sets will be shorter (25 games each) and will all be played at the same speed.

        To start the first set of games, press SPACEBAR.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        print('made it to blankety')
  Routine next_block
  Routine nextblock
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nice work, you've finished another set of games! Feel free to take a break.

        When you're ready to continue, press SPACEBAR.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine total_score
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        $total_points
  Routine total_score_2
  Routine Pre_experiment
  Routine pre_exp
    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = formitems.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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  Routine catch_intro
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        +
    KeyboardComponent key_resp_4
      allowedKeys = '='
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stair_intro
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great job, now you're ready to play the game for real!

        In the first round of games, the speed of the game might change each time you play. Just do your best to catch the ball each time.

        Press SPACEBAR to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine play_stair
    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Make sure to really focus during this first set of 40 games. Your performance now will set the pace for the rest of the experiment!

        If you do not focus now, the rest of the experiment may feel slow and boring. Let's keep things fun instead :)

        Ready to play? Position your hand over the arrow heys and press the right or left arrow to begin!
    KeyboardComponent key_resp_8
      allowedKeys = ('right','left')
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        example = False
        trial_loop = 0
        gameloop=0
        total_points=0
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        number_of_games = 40
        current_game    = 0

        ball_y_pos     = [[.5, .4, .3, .2, .1, 0, -.1, -.2, -.3, -.4] for i in range(number_of_games)]

        def make_x_path(number_of_games, stair=True):
            '''
            inputs:
                number of games (int) - number of games that will be played
                stair (bool) - 'stair', 'main'
            '''

            if stair:
                # make totally random ball_x_pos lists
                ball_x_starts = [(random.randint(0,9)-4.5)/10 for i in range(number_of_games)]
                ball_x_ends   = [(random.randint(0,9)-4.5)/10 for i in range(number_of_games)]

            else:
                # make pseudorandom ball_x_pos lists
                # generate each possible combination of start/end locations
                # 100 in total (10 start positions, 10 end positions)
                x_positions  = [0, 1, 2, 3, 4, 5, 6, 7, 8, 9]
                x_positions = [(x-4.5)/10 for x in x_positions]

                f = [x for x in itertools.permutations(x_positions,r=2)]

                for x in x_positions:
                    f.append((x,x))

                random.shuffle(f)

                if len(f) != number_of_games:
                    print('Number of games does not match number of ball paths')

                ball_x_starts = [a[0] for a in f]
                ball_x_ends   = [a[1] for a in f]

            ball_x_pos = []

            for l in range(0,len(ball_x_starts)):

                start = ball_x_starts[l]
                end   = ball_x_ends[l]

                ball_path = [start]
                diff = start-end

                if diff>0:
                    dx = -.1

                elif diff<0:
                    dx = .1

                num_steps = abs(diff)*10

                for x in range(0,int(num_steps)):
                    ball_path.append(round(dx*(x+1) + start,2))

                while len(ball_path)<10:
                    ball_path.append(end)

                ball_x_pos.append(ball_path)

            return(ball_x_pos)


        ball_x_pos    = make_x_path(number_of_games, stair=True)
        #ball_x_pos    = make_x_path(2, stair=True)

        print(ball_x_pos)

        with open('ball_x_stair.pkl', 'wb') as f:
            pickle.dump(ball_x_pos, f)
  Routine ask_repeat
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If you feel like you'd like to play another practice round, press the left arrow.

        If you feel comfortable with the game and are ready to continue, press the right arrow.
    KeyboardComponent key_resp_12
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      End Routine:
        # if last key is right set repeat to 0,
        #elif last key is left set repeat to 1

        if key_resp_12.keys[-1]=='right':
            repeat = 1
        elif key_resp_12.keys[-1]=='left':
            repeat = 2
  Routine ask_repeat_2
  Routine sample_looper
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # if last key is right set repeat to 0,
        #elif last key is left set repeat to 1

        if key_resp.keys[-1]=='right':
            repeat = 0
        elif key_resp.keys[-1]=='left':
            repeat = 1
  Routine sample_looper_2
  Routine set_example
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        example = True
  Routine repeat_counter
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        repeat_counter=repeat_counter-1
    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nice job! Let's do one more practice game before we start.

        Press the right or left arrow to begin.
    KeyboardComponent key_resp_14
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine points_intro
    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Every time you win a game, you will earn more points! At the end of each set of games, we will show you how many points you've earned out of the maximum possible points.

        Press SPACEBAR to continue
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine game_win2
    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        +2 points. Game over!

        Out of 50 possible points, your total score is...
  Routine game_lose2
    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        +0 points. Game over!

        Out of 50 possible points, your total score is...
  Routine fixation_pre
    TextComponent fix1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent welcome_key
      allowedKeys = 'equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        movie_file = 'movie_stim_'+str(expInfo['session'])+'.csv'
    CodeComponent code_testing
      Code Type = Auto->JS
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      Begin Experiment:
        frames=[]
      Each Frame:
        # get the current frame
        frame = win.getMovieFrame(buffer='front')

        # save the frame to a list
        frames.append(frame)
      End Experiment:
        win.saveMovieFrames(fileName='recording_front.mp4')
  Routine video
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $moviestim
      size = (1, .66)
      startVal [frame N] = 0.0
      volume = 0
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  Routine fixation_between
    TextComponent fix2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0
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      text:
        +
  Routine judgment_pre_resp
    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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      text:
        This attention was from a:

        1) real agent
         2) fake agent

        (Press 1 or 2)
    KeyboardComponent key_resp_9
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
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    CodeComponent code_11
      Code Type = Auto->JS
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      End Routine:
        # which screen to show post-selection
        # (selection_1 and selection_2 control the loops)
        selection_1 = 0
        selection_2 = 0

        #print(type(key_resp_9.keys))
        #if type(key_resp_9.keys)==list:

        if key_resp_9.keys:
        #if len(key_resp_9.keys)>0:

            if key_resp_9.keys[-1]=='2':
                selection_2 += 1
            elif key_resp_9.keys[-1]=='1':
                selection_1 += 1
  Routine post_select_1
    TextComponent judgment_post_resp_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $post_timing
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      text:
        This attention was from a:

        >>  1) real agent  <<
         2) fake agent

        (Press 1 or 2)
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # duration of post-selection screen
        post_timing = 3 - key_resp_9.rt[0]
  Routine post_select_2
    TextComponent judgment_post_resp_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $post_timing
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      text:
        This attention was from a:

        1) real agent
         >>  2) fake agent  <<

        (Press 1 or 2)
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        # duration of post-selection screen
        post_timing = 3 - key_resp_9.rt[0]
  Routine fixation_end
    TextComponent fix4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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  Routine start_fixation
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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  Routine start_fixation_2
  Routine fixation_post_2
  Routine fixation_ISI
    TextComponent fix3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $jitters
      text = +
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Flow
  Routine fixation_pre
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $movie_file
    loopType = sequential
    nReps = 1
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    Routine fixation_ISI
    Routine video
    Routine judgment_pre_resp
  LoopTerminator trials
  Routine fixation_end
